! Export all of the data to matfiles
! Set the folder path where you want to export the data
Set_Pipeline_Parameter_To_Folder_Path
/PARAMETER_NAME=OutputFolder
/PARAMETER_VALUE=
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/SET_PROMPT=Select a folder to export the data to (Z:\SSL\Research\Graduate Students\Thompson, Devin\C-Motion\PitchModality\OutputData\)
! /ALPHABETIZE=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES=PITCH_VEL+EXIT_VEL+LAUNCH_ANGLE+SPRAY_ANGLE+IMPACT_LOCATION_ECAP+IMPACT_LOCATION_KNOB+MAX_BAT_ANG_VEL+MAX_BAT_ECAP_MAG_VEL+MAX_BAT_SWEET_SPOT_MAG_VEL+MAX_BAT_ECAP_ACC+MAX_BAT_SWEET_SPOT_ACC+MAX_BAT_KE+MAX_BAT_POWER+MAX_BAT_KE_FILT+MAX_BAT_POWER_FILT
/FILE_NAME=::OutputFolder&BatBallData.mat
/MATLAB_NAMES=pitchVel+exitVel+launchAng+sprayAng+impactLocECAP+impactLocKNOB+maxBatAngVel+maxBatECAPVel+maxBatSSVel+maxBatECAPAcc+maxBatSSAcc+maxBatKE+maxBatPower+maxBatKEFilt+maxBatPowerFilt
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= STANCE_BAT_ANG_VEL+STANCE_BAT_ECAP_MAG_ACC+STANCE_BAT_ECAP_MAG_VEL+STANCE_BAT_SWEET_SPOT_MAG_ACC+STANCE_BAT_SWEET_SPOT_VEL+STANCE_HIP_ROTATION+STANCE_HIP_VELOCITY+STANCE_LEAD_ELBOW_FLEXION+STANCE_LEAD_ELBOW_VELOCITY+STANCE_LEAD_KNEE_FLEXION+STANCE_LEAD_KNEE_VELOCITY+STANCE_REAR_ELBOW_FLEXION+STANCE_REAR_ELBOW_VELOCITY+STANCE_REAR_KNEE_FLEXION+STANCE_REAR_KNEE_VELOCITY+STANCE_REAR_SHOULDER_ABD+STANCE_TRUNK_FLEXION+STANCE_TRUNK_LATERAL_FLEXION+STANCE_TRUNK_ROTATION+STANCE_TRUNK_VELOCITY+STANCE_LEAD_ARM_ANG_VEL+STANCE_LEAD_HAND_ANG_VEL+STANCE_HEAD_ROTATION+STANCE_HEAD_LATERAL_FLEXION+STANCE_HEAD_FLEXION
/FILE_NAME=::OutputFolder&StanceData.mat
/MATLAB_NAMES= BatAngVel+BatECAPAcc+BatECAPVel+BatSSAcc+BatSSVel+HipRot+HipRotVel+LeadElbowFlex+LeadElbowVel+LeadKneeFlex+LeadKneeVel+RearElbowFlex+RearElbowVel+RearKneeFlex+RearKneeVel+ShouldAbd+TrunkFlex+TrunkLatFlex+TrunkRot+TrunkVel+LeadArmAngVel+LeadHandAngVel+HeadRot+HeadLatFlex+HeadFlex
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= LOAD_BAT_ANG_VEL+LOAD_BAT_ECAP_MAG_ACC+LOAD_BAT_ECAP_MAG_VEL+LOAD_BAT_SWEET_SPOT_MAG_ACC+LOAD_BAT_SWEET_SPOT_VEL+LOAD_HIP_ROTATION+LOAD_HIP_VELOCITY+LOAD_LEAD_ELBOW_FLEXION+LOAD_LEAD_ELBOW_VELOCITY+LOAD_LEAD_KNEE_FLEXION+LOAD_LEAD_KNEE_VELOCITY+LOAD_REAR_ELBOW_FLEXION+LOAD_REAR_ELBOW_VELOCITY+LOAD_REAR_KNEE_FLEXION+LOAD_REAR_KNEE_VELOCITY+LOAD_REAR_SHOULDER_ABD+LOAD_TRUNK_FLEXION+LOAD_TRUNK_LATERAL_FLEXION+LOAD_TRUNK_ROTATION+LOAD_TRUNK_VELOCITY+LOAD_LEAD_ARM_ANG_VEL+LOAD_LEAD_HAND_ANG_VEL+LOAD_HEAD_ROTATION+LOAD_HEAD_LATERAL_FLEXION+LOAD_HEAD_FLEXION
/FILE_NAME=::OutputFolder&LoadData.mat
/MATLAB_NAMES= BatAngVel+BatECAPAcc+BatECAPVel+BatSSAcc+BatSSVel+HipRot+HipRotVel+LeadElbowFlex+LeadElbowVel+LeadKneeFlex+LeadKneeVel+RearElbowFlex+RearElbowVel+RearKneeFlex+RearKneeVel+ShouldAbd+TrunkFlex+TrunkLatFlex+TrunkRot+TrunkVel+LeadArmAngVel+LeadHandAngVel+HeadRot+HeadLatFlex+HeadFlex
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= FOOT_DOWN_BAT_ANG_VEL+FOOT_DOWN_BAT_ECAP_MAG_ACC+FOOT_DOWN_BAT_ECAP_MAG_VEL+FOOT_DOWN_BAT_SWEET_SPOT_MAG_ACC+FOOT_DOWN_BAT_SWEET_SPOT_VEL+FOOT_DOWN_HIP_ROTATION+FOOT_DOWN_HIP_VELOCITY+FOOT_DOWN_LEAD_ELBOW_FLEXION+FOOT_DOWN_LEAD_ELBOW_VELOCITY+FOOT_DOWN_LEAD_KNEE_FLEXION+FOOT_DOWN_LEAD_KNEE_VELOCITY+FOOT_DOWN_REAR_ELBOW_FLEXION+FOOT_DOWN_REAR_ELBOW_VELOCITY+FOOT_DOWN_REAR_KNEE_FLEXION+FOOT_DOWN_REAR_KNEE_VELOCITY+FOOT_DOWN_REAR_SHOULDER_ABD+FOOT_DOWN_TRUNK_FLEXION+FOOT_DOWN_TRUNK_LATERAL_FLEXION+FOOT_DOWN_TRUNK_ROTATION+FOOT_DOWN_TRUNK_VELOCITY+FOOT_DOWN_LEAD_ARM_ANG_VEL+FOOT_DOWN_LEAD_HAND_ANG_VEL+FOOT_DOWN_HEAD_ROTATION+FOOT_DOWN_HEAD_LATERAL_FLEXION+FOOT_DOWN_HEAD_FLEXION
/FILE_NAME=::OutputFolder&FootDownData.mat
/MATLAB_NAMES= BatAngVel+BatECAPAcc+BatECAPVel+BatSSAcc+BatSSVel+HipRot+HipRotVel+LeadElbowFlex+LeadElbowVel+LeadKneeFlex+LeadKneeVel+RearElbowFlex+RearElbowVel+RearKneeFlex+RearKneeVel+ShouldAbd+TrunkFlex+TrunkLatFlex+TrunkRot+TrunkVel+LeadArmAngVel+LeadHandAngVel+HeadRot+HeadLatFlex+HeadFlex
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= IMPACT_BAT_ANG_VEL+IMPACT_BAT_ECAP_MAG_ACC+IMPACT_BAT_ECAP_MAG_VEL+IMPACT_BAT_SWEET_SPOT_MAG_ACC+IMPACT_BAT_SWEET_SPOT_VEL+IMPACT_HIP_ROTATION+IMPACT_HIP_VELOCITY+IMPACT_LEAD_ELBOW_FLEXION+IMPACT_LEAD_ELBOW_VELOCITY+IMPACT_LEAD_KNEE_FLEXION+IMPACT_LEAD_KNEE_VELOCITY+IMPACT_REAR_ELBOW_FLEXION+IMPACT_REAR_ELBOW_VELOCITY+IMPACT_REAR_KNEE_FLEXION+IMPACT_REAR_KNEE_VELOCITY+IMPACT_REAR_SHOULDER_ABD+IMPACT_TRUNK_FLEXION+IMPACT_TRUNK_LATERAL_FLEXION+IMPACT_TRUNK_ROTATION+IMPACT_TRUNK_VELOCITY+IMPACT_LEAD_ARM_ANG_VEL+IMPACT_LEAD_HAND_ANG_VEL+IMPACT_HEAD_ROTATION+IMPACT_HEAD_LATERAL_FLEXION+IMPACT_HEAD_FLEXION
/FILE_NAME=::OutputFolder&ImpactData.mat
/MATLAB_NAMES= BatAngVel+BatECAPAcc+BatECAPVel+BatSSAcc+BatSSVel+HipRot+HipRotVel+LeadElbowFlex+LeadElbowVel+LeadKneeFlex+LeadKneeVel+RearElbowFlex+RearElbowVel+RearKneeFlex+RearKneeVel+ShouldAbd+TrunkFlex+TrunkLatFlex+TrunkRot+TrunkVel+LeadArmAngVel+LeadHandAngVel+HeadRot+HeadLatFlex+HeadFlex
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= FIRST_MOVE_BAT_ANG_VEL+FIRST_MOVE_BAT_ECAP_MAG_ACC+FIRST_MOVE_BAT_ECAP_MAG_VEL+FIRST_MOVE_BAT_SWEET_SPOT_MAG_ACC+FIRST_MOVE_BAT_SWEET_SPOT_VEL+FIRST_MOVE_HIP_ROTATION+FIRST_MOVE_HIP_VELOCITY+FIRST_MOVE_LEAD_ELBOW_FLEXION+FIRST_MOVE_LEAD_ELBOW_VELOCITY+FIRST_MOVE_LEAD_KNEE_FLEXION+FIRST_MOVE_LEAD_KNEE_VELOCITY+FIRST_MOVE_REAR_ELBOW_FLEXION+FIRST_MOVE_REAR_ELBOW_VELOCITY+FIRST_MOVE_REAR_KNEE_FLEXION+FIRST_MOVE_REAR_KNEE_VELOCITY+FIRST_MOVE_REAR_SHOULDER_ABD+FIRST_MOVE_TRUNK_FLEXION+FIRST_MOVE_TRUNK_LATERAL_FLEXION+FIRST_MOVE_TRUNK_ROTATION+FIRST_MOVE_TRUNK_VELOCITY+FIRST_MOVE_LEAD_ARM_ANG_VEL+FIRST_MOVE_LEAD_HAND_ANG_VEL+FIRST_MOVE_HEAD_ROTATION+FIRST_MOVE_HEAD_LATERAL_FLEXION+FIRST_MOVE_HEAD_FLEXION
/FILE_NAME=::OutputFolder&FirstMoveData.mat
/MATLAB_NAMES= BatAngVel+BatECAPAcc+BatECAPVel+BatSSAcc+BatSSVel+HipRot+HipRotVel+LeadElbowFlex+LeadElbowVel+LeadKneeFlex+LeadKneeVel+RearElbowFlex+RearElbowVel+RearKneeFlex+RearKneeVel+ShouldAbd+TrunkFlex+TrunkLatFlex+TrunkRot+TrunkVel+LeadArmAngVel+LeadHandAngVel+HeadRot+HeadLatFlex+HeadFlex
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= FOLLOW_THROUGH_BAT_ANG_VEL+FOLLOW_THROUGH_BAT_ECAP_MAG_ACC+FOLLOW_THROUGH_BAT_ECAP_MAG_VEL+FOLLOW_THROUGH_BAT_SWEET_SPOT_MAG_ACC+FOLLOW_THROUGH_BAT_SWEET_SPOT_VEL+FOLLOW_THROUGH_HIP_ROTATION+FOLLOW_THROUGH_HIP_VELOCITY+FOLLOW_THROUGH_LEAD_ELBOW_FLEXION+FOLLOW_THROUGH_LEAD_ELBOW_VELOCITY+FOLLOW_THROUGH_LEAD_KNEE_FLEXION+FOLLOW_THROUGH_LEAD_KNEE_VELOCITY+FOLLOW_THROUGH_REAR_ELBOW_FLEXION+FOLLOW_THROUGH_REAR_ELBOW_VELOCITY+FOLLOW_THROUGH_REAR_KNEE_FLEXION+FOLLOW_THROUGH_REAR_KNEE_VELOCITY+FOLLOW_THROUGH_REAR_SHOULDER_ABD+FOLLOW_THROUGH_TRUNK_FLEXION+FOLLOW_THROUGH_TRUNK_LATERAL_FLEXION+FOLLOW_THROUGH_TRUNK_ROTATION+FOLLOW_THROUGH_TRUNK_VELOCITY+FOLLOW_THROUGH_LEAD_ARM_ANG_VEL+FOLLOW_THROUGH_LEAD_HAND_ANG_VEL+FOLLOW_THROUGH_HEAD_ROTATION+FOLLOW_THROUGH_HEAD_LATERAL_FLEXION+FOLLOW_THROUGH_HEAD_FLEXION
/FILE_NAME=::OutputFolder&FollowThroughData.mat
/MATLAB_NAMES= BatAngVel+BatECAPAcc+BatECAPVel+BatSSAcc+BatSSVel+HipRot+HipRotVel+LeadElbowFlex+LeadElbowVel+LeadKneeFlex+LeadKneeVel+RearElbowFlex+RearElbowVel+RearKneeFlex+RearKneeVel+ShouldAbd+TrunkFlex+TrunkLatFlex+TrunkRot+TrunkVel+LeadArmAngVel+LeadHandAngVel+HeadRot+HeadLatFlex+HeadFlex
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= FOOT_UP_BAT_ANG_VEL+FOOT_UP_BAT_ECAP_MAG_ACC+FOOT_UP_BAT_ECAP_MAG_VEL+FOOT_UP_BAT_SWEET_SPOT_MAG_ACC+FOOT_UP_BAT_SWEET_SPOT_VEL+FOOT_UP_HIP_ROTATION+FOOT_UP_HIP_VELOCITY+FOOT_UP_LEAD_ELBOW_FLEXION+FOOT_UP_LEAD_ELBOW_VELOCITY+FOOT_UP_LEAD_KNEE_FLEXION+FOOT_UP_LEAD_KNEE_VELOCITY+FOOT_UP_REAR_ELBOW_FLEXION+FOOT_UP_REAR_ELBOW_VELOCITY+FOOT_UP_REAR_KNEE_FLEXION+FOOT_UP_REAR_KNEE_VELOCITY+FOOT_UP_REAR_SHOULDER_ABD+FOOT_UP_TRUNK_FLEXION+FOOT_UP_TRUNK_LATERAL_FLEXION+FOOT_UP_TRUNK_ROTATION+FOOT_UP_TRUNK_VELOCITY+FOOT_UP_LEAD_ARM_ANG_VEL+FOOT_UP_LEAD_HAND_ANG_VEL+FOOT_UP_HEAD_ROTATION+FOOT_UP_HEAD_LATERAL_FLEXION+FOOT_UP_HEAD_FLEXION
/FILE_NAME=::OutputFolder&FootUpData.mat
/MATLAB_NAMES= BatAngVel+BatECAPAcc+BatECAPVel+BatSSAcc+BatSSVel+HipRot+HipRotVel+LeadElbowFlex+LeadElbowVel+LeadKneeFlex+LeadKneeVel+RearElbowFlex+RearElbowVel+RearKneeFlex+RearKneeVel+ShouldAbd+TrunkFlex+TrunkLatFlex+TrunkRot+TrunkVel+LeadArmAngVel+LeadHandAngVel+HeadRot+HeadLatFlex+HeadFlex
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= SWING_TIME_HAND+SWING_TIME_FOOTUP+SWING_TIME_FOOTDOWN+STANCE_FOOTUP_TIME+FOOTUP_LOAD_TIME+LOAD_FIRSTMOVE_TIME+FIRSTMOVE_FOOTDOWN_TIME+FOOTDOWN_IMPACT_TIME+IMPACT_FOLLOWTHROUGH_TIME
/FILE_NAME=::OutputFolder&TimingData.mat
/MATLAB_NAMES= swingTimeHand+swingTimeFootUp+swingTimeFootDown+stanceFootUpTime+footUpLoadTime+loadFirstMoveTime+firstMoveFootDownTime+footDownImpactTime+impactFollowThroughTime
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER= PROCESSED
/SIGNAL_NAMES= MAX_HIP_ROTATION_VELOCITY+MAX_TRUNK_ROTATION_VELOCITY+MAX_LEAD_ELBOW_VELOCITY+MAX_REAR_ELBOW_VELOCITY+MAX_LEAD_KNEE_VELOCITY+MAX_REAR_KNEE_VELOCITY+MAX_HIP_ROTATION+MAX_TRUNK_ROTATION+MAX_TRUNK_FLEXION+MAX_TRUNK_LATERAL_FLEXION+MAX_REAR_SHOULDER_ABD+MAX_LEAD_KNEE_FLEX+MAX_LEAD_ELBOW_FLEX+MAX_REAR_KNEE_FLEX+MAX_REAR_ELBOW_FLEX+MAX_LEAD_ARM_ANG_VEL+MAX_LEAD_HAND_ANG_VEL+MAX_HEAD_ROTATION+MAX_HEAD_LATERAL_FLEXION+MAX_HEAD_FLEXION
/FILE_NAME=::OutputFolder&MaxData.mat
/MATLAB_NAMES= maxHipRotVel+maxTrunkRotVel+maxLeadElbowVel+maxRearElbowVel+maxLeadKneeVel+maxRearKneeVel+maxHipRotation+maxTrunkRotation+maxTrunkFlexion+maxTrunkLateralFlexion+maxShoulderAbd+maxLeadKneeFlexion+maxLeadElbowFlexion+maxRearKneeFlexion+maxRearElbowFlexion+maxLeadArmAngVel+maxLeadHandAngVel+maxHeadRotation+maxHeadLateralFlexion+maxHeadFlexion
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES= EVENT_LABEL
/SIGNAL_FOLDER= ORIGINAL
/SIGNAL_NAMES= STANCE+FOOT_UP+LOAD+FIRST_MOVE+FOOT_DOWN+IMPACT+FOLLOW_THROUGH+MAX_BAT_ECAP_MAG_VEL+MAX_BAT_SWEET_SPOT_MAG_VEL+MAX_MAG_BAT_ANG_VEL+MAX_HIP_ROTATION_VELOCITY+MAX_TRUNK_ROTATION_VELOCITY+MAX_LEAD_ELBOW_VELOCITY+MAX_REAR_ELBOW_VELOCITY+MAX_LEAD_KNEE_VELOCITY+MAX_REAR_KNEE_VELOCITY+MAX_HIP_ROTATION+MAX_TRUNK_ROTATION+MAX_TRUNK_FLEXION+MAX_TRUNK_LATERAL_FLEXION+MAX_REAR_SHOULDER_ABD+MAX_LEAD_KNEE_FLEXION+MAX_LEAD_ELBOW_FLEXION+MAX_REAR_KNEE_FLEXION+MAX_REAR_ELBOW_FLEXION+MAX_LEAD_ARM_ANG_VEL+MAX_LEAD_HAND_ANG_VEL+MAX_HEAD_ROTATION+MAX_HEAD_LATERAL_FLEXION+MAX_HEAD_FLEXION
/FILE_NAME=::OutputFolder&TimeMaxData.mat
/MATLAB_NAMES= stance+footUp+load+firstMove+footDown+impact+followThrough+maxBatECAPVelTime+maxBatSSVelTime+maxBatAngVelTime+maxHipRotVelTime+maxTrunkRotVelTime+maxLeadElbowVelTime+maxRearElbowVelTime+maxLeadKneeVelTime+maxRearKneeVelTime+maxHipRotationTime+maxTrunkRotationTime+maxTrunkFlexionTime+maxTrunkLateralFlexionTime+maxShoulderAbdTime+maxLeadKneeFlexionTime+maxLeadElbowFlexionTime+maxRearKneeFlexionTime+maxRearElbowFlexionTime+maxLeadArmAngVelTime+maxLeadHandAngVelTime+maxHeadRotationTime+maxHeadLateralFlexionTime+maxHeadFlexionTime
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

Export_Data_To_Matfile
/SIGNAL_TYPES=LINK_MODEL_BASED+DERIVED+LINK_MODEL_BASED+DERIVED+LINK_MODEL_BASED+DERIVED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+TARGET+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=ORIGINAL+PROCESSED+ORIGINAL+PROCESSED+ORIGINAL+PROCESSED+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=LEAD_ELBOW_ANGLES+LEAD_ELBOW_VELOCITY+LEAD_KNEE_ANGLES+LEAD_KNEE_VELOCITY+REAR_ELBOW_ANGLES+REAR_ELBOW_VELOCITY+REAR_KNEE_ANGLES+REAR_KNEE_VELOCITY+BAT_ECAP_MAG_ACC+BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_ACC+BAT_SWEET_SPOT_MAG_VEL+HEAD_FLEXION+HEAD_LATERAL_FLEXION+HEAD_ROTATION+HIP_ROTATION+HIP_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+LEAD_WRIST_MAG_ACC+LEAD_WRIST_MAG_VEL+MAG_BAT_ANG_VEL+REAR_SHOULDER_ABD+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+TRUNK_ROTATION+TRUNK_ROTATION_VELOCITY+Ball1+TOTAL_BAT_KE+BAT_POWER+TOTAL_BAT_KE_FILT+BAT_POWER_FILT
/FILE_NAME=::OutputFolder&SignalData.mat
/MATLAB_NAMES=leadElbowAngles+leadElbowVel+leadKneeAngles+leadKneeVel+rearElbowAngles+rearElbowVel+rearKneeAngles+rearKneeVel+batECAPAcc+batECAPVel+batSSAcc+batSSVel+headFlexion+headLateralFlexion+headRotation+hipRotation+hipRotationVel+leadArmAngVel+leadHandAngVel+leadWristAcc+leadWristVel+batAngVel+rearShoulderAbduction+trunkFlexion+trunkLateralFlexion+trunkRotation+trunkRotationVel+ballPosition+batKE+batPower+batKEFilt+batPowerFilt
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

