! Find the maximum values for each metric
Metric_Maximum
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=MAX_BAT_ANG_VEL+MAX_LEAD_ELBOW_VELOCITY+MAX_LEAD_KNEE_VELOCITY+MAX_REAR_ELBOW_VELOCITY+MAX_REAR_KNEE_VELOCITY+MAX_BAT_ECAP_MAG_VEL+MAX_BAT_SWEET_SPOT_MAG_VEL+MAX_HIP_ROTATION_VELOCITY+MAX_TRUNK_ROTATION_VELOCITY+MAX_BAT_SWEET_SPOT_ACC+MAX_BAT_ECAP_ACC+MAX_LEAD_KNEE_FLEX+MAX_LEAD_ELBOW_FLEX+MAX_REAR_KNEE_FLEX+MAX_REAR_ELBOW_FLEX+MAX_HIP_ROTATION+MAX_TRUNK_ROTATION+MAX_REAR_SHOULDER_ABD+MAX_TRUNK_FLEXION+MAX_TRUNK_LATERAL_FLEXION+MAX_LEAD_ARM_ANG_VEL+MAX_LEAD_HAND_ANG_VEL+MAX_HEAD_ROTATION+MAX_HEAD_LATERAL_FLEXION+MAX_HEAD_FLEXION+MAX_HIP_TRUNK_SEPARATION
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=MAG_BAT_ANG_VEL+LEAD_ELBOW_VELOCITY+LEAD_KNEE_VELOCITY+REAR_ELBOW_VELOCITY+REAR_KNEE_VELOCITY+BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+BAT_SWEET_SPOT_MAG_ACC+BAT_ECAP_MAG_ACC+LEAD_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_KNEE_ANGLES+REAR_ELBOW_ANGLES+HIP_ROTATION+TRUNK_ROTATION+REAR_SHOULDER_ABD+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION+HIP_TRUNK_SEPARATION
/COMPONENT_SEQUENCE=X
/EVENT_SEQUENCE=SWING
/EXCLUDE_EVENTS=
/SEQUENCE_PERCENT_START=
/SEQUENCE_PERCENT_END=
/GENERATE_MEAN_AND_STDDEV=TRUE
! /APPEND_TO_EXISTING_VALUES=FALSE
! /CREATE_GLOBAL_MAXIMUM=FALSE
;

Metric_Minimum
! Maximum hip, trunk rotation is negative (what we're actually interested in), due to definition, not for trunk rotation anymore, changed the definition
/RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME= MAX_HIP_ROTATION
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/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES= HIP_ROTATION
/COMPONENT_SEQUENCE=X
/EVENT_SEQUENCE= SWING
/EXCLUDE_EVENTS=
/GENERATE_MEAN_AND_STDDEV=TRUE
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! /CREATE_GLOBAL_MINIMUM=FALSE
;

