! Merge all of the metrics together for export
Merge_Data
! Merge all of the bat and ball metrics for export
/SIGNAL_TYPES= METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES= PITCH_VEL+EXIT_VEL+LAUNCH_ANGLE+IMPACT_LOCATION_ECAP+IMPACT_LOCATION_KNOB+MAX_BAT_ANG_VEL+MAX_BAT_ECAP_MAG_VEL+MAX_BAT_SWEET_SPOT_MAG_VEL+MAX_BAT_ECAP_ACC+MAX_BAT_SWEET_SPOT_ACC
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/RESULT_TYPES=METRIC
/RESULT_FOLDERS=FOR_EXPORT
/RESULT_NAME=BAT_BALL_TABLE
/MERGE_TYPE=MERGE_AS_NEW_COMPONENTS
!/IGNORE_MISSING_SIGNALS=FALSE
! /PRE_CLEAR_RESULT_SIGNAL=FALSE
;

Merge_Data
! Merge all of the stance metrics together
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=STANCE_BAT_ANG_VEL+STANCE_BAT_ECAP_MAG_ACC+STANCE_BAT_ECAP_MAG_VEL+STANCE_BAT_SWEET_SPOT_MAG_ACC+STANCE_BAT_SWEET_SPOT_VEL+STANCE_HIP_ROTATION+STANCE_HIP_VELOCITY+STANCE_L_ELBOW_FLEXION+STANCE_L_ELBOW_VELOCITY+STANCE_L_KNEE_FLEXION+STANCE_L_KNEE_VELOCITY+STANCE_R_ELBOW_FLEXION+STANCE_R_ELBOW_VELOCITY+STANCE_R_KNEE_FLEXION+STANCE_R_KNEE_VELOCITY+STANCE_REAR_SHOULDER_ABD+STANCE_TRUNK_FLEXION+STANCE_TRUNK_LATERAL_FLEXION+STANCE_TRUNK_ROTATION+STANCE_TRUNK_VELOCITY
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/RESULT_TYPES=METRIC
/RESULT_FOLDERS=FOR_EXPORT
/RESULT_NAME= STANCE_TABLE
/MERGE_TYPE=MERGE_AS_NEW_COMPONENTS
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!/PRE_CLEAR_RESULT_SIGNAL=FALSE
;

Merge_Data
! Merge all of the load metrics together
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=LOAD_BAT_ANG_VEL+LOAD_BAT_ECAP_MAG_ACC+LOAD_BAT_ECAP_MAG_VEL+LOAD_BAT_SWEET_SPOT_MAG_ACC+LOAD_BAT_SWEET_SPOT_VEL+LOAD_HIP_ROTATION+LOAD_HIP_VELOCITY+LOAD_L_ELBOW_FLEXION+LOAD_L_ELBOW_VELOCITY+LOAD_L_KNEE_FLEXION+LOAD_L_KNEE_VELOCITY+LOAD_R_ELBOW_FLEXION+LOAD_R_ELBOW_VELOCITY+LOAD_R_KNEE_FLEXION+LOAD_R_KNEE_VELOCITY+LOAD_REAR_SHOULDER_ABD+LOAD_TRUNK_FLEXION+LOAD_TRUNK_LATERAL_FLEXION+LOAD_TRUNK_ROTATION+LOAD_TRUNK_VELOCITY
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/RESULT_TYPES=METRIC
/RESULT_FOLDERS= FOR_EXPORT
/RESULT_NAME= LOAD_TABLE
/MERGE_TYPE=MERGE_AS_NEW_COMPONENTS
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;

Merge_Data
! Merge all of the foot-down metrics together
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=FOOT_DOWN_BAT_ANG_VEL+FOOT_DOWN_BAT_ECAP_MAG_ACC+FOOT_DOWN_BAT_ECAP_MAG_VEL+FOOT_DOWN_BAT_SWEET_SPOT_MAG_ACC+FOOT_DOWN_BAT_SWEET_SPOT_VEL+FOOT_DOWN_HIP_ROTATION+FOOT_DOWN_HIP_VELOCITY+FOOT_DOWN_L_ELBOW_FLEXION+FOOT_DOWN_L_ELBOW_VELOCITY+FOOT_DOWN_L_KNEE_FLEXION+FOOT_DOWN_L_KNEE_VELOCITY+FOOT_DOWN_R_ELBOW_FLEXION+FOOT_DOWN_R_ELBOW_VELOCITY+FOOT_DOWN_R_KNEE_FLEXION+FOOT_DOWN_R_KNEE_VELOCITY+FOOT_DOWN_REAR_SHOULDER_ABD+FOOT_DOWN_TRUNK_FLEXION+FOOT_DOWN_TRUNK_LATERAL_FLEXION+FOOT_DOWN_TRUNK_ROTATION+FOOT_DOWN_TRUNK_VELOCITY
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/RESULT_TYPES=METRIC
/RESULT_FOLDERS=FOR_EXPORT
/RESULT_NAME= FOOT_DOWN_TABLE
/MERGE_TYPE= MERGE_AS_NEW_COMPONENTS
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;

Merge_Data
! Merge all of the impact metrics together
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=IMPACT_BAT_ANG_VEL+IMPACT_BAT_ECAP_MAG_ACC+IMPACT_BAT_ECAP_MAG_VEL+IMPACT_BAT_SWEET_SPOT_MAG_ACC+IMPACT_BAT_SWEET_SPOT_VEL+IMPACT_HIP_ROTATION+IMPACT_HIP_VELOCITY+IMPACT_L_ELBOW_FLEXION+IMPACT_L_ELBOW_VELOCITY+IMPACT_L_KNEE_FLEXION+IMPACT_L_KNEE_VELOCITY+IMPACT_R_ELBOW_FLEXION+IMPACT_R_ELBOW_VELOCITY+IMPACT_R_KNEE_FLEXION+IMPACT_R_KNEE_VELOCITY+IMPACT_REAR_SHOULDER_ABD+IMPACT_TRUNK_FLEXION+IMPACT_TRUNK_LATERAL_FLEXION+IMPACT_TRUNK_ROTATION+IMPACT_TRUNK_VELOCITY
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/RESULT_TYPES=METRIC
/RESULT_FOLDERS=FOR_EXPORT
/RESULT_NAME=IMPACT_TABLE
/MERGE_TYPE=MERGE_AS_NEW_COMPONENTS
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;

Merge_Data
! Merge the time metrics together
/SIGNAL_TYPES=METRIC
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES= STANCE_LOAD_TIME+LOAD_FOOTDOWN_TIME+FOOTDOWN_IMPACT_TIME+SWING_TIME
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/RESULT_TYPES=METRIC
/RESULT_FOLDERS=FOR_EXPORT
/RESULT_NAME= TIMES_TABLE
/MERGE_TYPE=MERGE_AS_NEW_COMPONENTS
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;

Merge_Data
! Merge the event times together for export
/SIGNAL_TYPES=EVENT_LABEL
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES= STANCE+LOAD+FOOT_DOWN+IMPACT+MAX_BAT_ECAP_MAG_VEL+MAX_BAT_SWEET_SPOT_MAG_VEL+MAX_MAG_BAT_ANG_VEL+MAX_HIP_ROTATION_VELOCITY+MAX_TRUNK_ROTATION_VELOCITY+MAX_L_ELBOW_VELOCITY+MAX_R_ELBOW_VELOCITY+MAX_L_KNEE_VELOCITY+MAX_R_KNEE_VELOCITY
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/RESULT_TYPES=METRIC
/RESULT_FOLDERS=FOR_EXPORT
/RESULT_NAME= EVENTTIMES_TABLE
/MERGE_TYPE=MERGE_AS_NEW_COMPONENTS
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;

