Compute_Model_Based_Data
! Compute left knee angles - Lead for RH hitter
/RESULT_NAME=LEAD_KNEE_ANGLES
/FUNCTION=JOINT_ANGLE
/SEGMENT=LSK
/REFERENCE_SEGMENT=LTH
/RESOLUTION_COORDINATE_SYSTEM=
! /USE_CARDAN_SEQUENCE=FALSE
! /NORMALIZATION=FALSE
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/NEGATEX=TRUE
! /NEGATEY=FALSE
! /NEGATEZ=FALSE
! /AXIS1=X
! /AXIS2=Y
! /AXIS3=Z
! /TREADMILL_DATA=FALSE
! /TREADMILL_DIRECTION=UNIT_VECTOR(0,1,0)
! /TREADMILL_SPEED=0.0
;

Compute_Model_Based_Data
! Compute right knee angles - Rear for RH hitter
/RESULT_NAME=REAR_KNEE_ANGLES
/FUNCTION=JOINT_ANGLE
/SEGMENT=RSK
/REFERENCE_SEGMENT=RTH
/RESOLUTION_COORDINATE_SYSTEM=
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/NEGATEX=TRUE
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;

Compute_Model_Based_Data
! Left elbow angles - Lead for RH hitter
/RESULT_NAME=LEAD_ELBOW_ANGLES
/FUNCTION=JOINT_ANGLE
/SEGMENT=LFA
/REFERENCE_SEGMENT=LAR
/RESOLUTION_COORDINATE_SYSTEM=
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! /NEGATEX=FALSE
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;

Compute_Model_Based_Data
! Right elbow angles - Rear for RH hitter
/RESULT_NAME=REAR_ELBOW_ANGLES
/FUNCTION=JOINT_ANGLE
/SEGMENT=RFA
/REFERENCE_SEGMENT=RAR
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
! Compute the hip angles relative to the lab coordinate system
/RESULT_NAME=HIP_ANGLES
/FUNCTION=JOINT_ANGLE
/SEGMENT=RPV
/REFERENCE_SEGMENT=Lab_R
/RESOLUTION_COORDINATE_SYSTEM=
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;

Compute_Model_Based_Data
! Compute the trunk angles relative to the hip.
! NOT THE SAME AS PLANAR ANGLES IN FRONTAL, SAGITTAL, AND TRANSVERSE
/RESULT_NAME=TRUNK_ANGLES_RHIP
/FUNCTION=JOINT_ANGLE
/SEGMENT=RTA
/REFERENCE_SEGMENT=RPV
/RESOLUTION_COORDINATE_SYSTEM=
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;

