Metric_Signal_Value_At_Event
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+MAG_BAT_ANG_VEL+BAT_ECAP_MAG_ACC+BAT_SWEET_SPOT_MAG_ACC+LEAD_KNEE_ANGLES+REAR_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_ELBOW_ANGLES+LEAD_KNEE_VELOCITY+REAR_KNEE_VELOCITY+LEAD_ELBOW_VELOCITY+REAR_ELBOW_VELOCITY+HIP_ROTATION+TRUNK_ROTATION+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+REAR_SHOULDER_ABD+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION
! /RESULT_METRIC_FOLDER=PROCESSED
/RESULT_METRIC_NAME=STANCE_BAT_ECAP_MAG_VEL+STANCE_BAT_SWEET_SPOT_VEL+STANCE_BAT_ANG_VEL+STANCE_BAT_ECAP_MAG_ACC+STANCE_BAT_SWEET_SPOT_MAG_ACC+STANCE_LEAD_KNEE_FLEXION+STANCE_REAR_KNEE_FLEXION+STANCE_LEAD_ELBOW_FLEXION+STANCE_REAR_ELBOW_FLEXION+STANCE_LEAD_KNEE_VELOCITY+STANCE_REAR_KNEE_VELOCITY+STANCE_LEAD_ELBOW_VELOCITY+STANCE_REAR_ELBOW_VELOCITY+STANCE_HIP_ROTATION+STANCE_TRUNK_ROTATION+STANCE_TRUNK_FLEXION+STANCE_TRUNK_LATERAL_FLEXION+STANCE_REAR_SHOULDER_ABD+STANCE_HIP_VELOCITY+STANCE_TRUNK_VELOCITY+STANCE_LEAD_ARM_ANG_VEL+STANCE_LEAD_HAND_ANG_VEL+STANCE_HEAD_ROTATION+STANCE_HEAD_LATERAL_FLEXION+STANCE_HEAD_FLEXION
! /APPLY_AS_SUFFIX_TO_SIGNAL_NAME=FALSE
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/COMPONENT_SEQUENCE=X, X, ALL, X, X, X, X, X, X, X, X, X, X, X, ALL, ALL, ALL, ALL, X, ALL, ALL, ALL, ALL, ALL, ALL
/EVENT_NAME=STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE, STANCE ,STANCE ,STANCE ,STANCE ,STANCE ,STANCE ,STANCE, STANCE, STANCE, STANCE, STANCE, STANCE
! /EVENT_INSTANCE=0
/GENERATE_MEAN_AND_STDDEV=FALSE
! /APPEND_TO_EXISTING_VALUES=FALSE
! /GENERATE_VECTOR_LENGTH_METRIC=FALSE
! /RETAIN_NO_DATA_VALUES=FALSE
;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+MAG_BAT_ANG_VEL+BAT_ECAP_MAG_ACC+BAT_SWEET_SPOT_MAG_ACC+LEAD_KNEE_ANGLES+REAR_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_ELBOW_ANGLES+LEAD_KNEE_VELOCITY+REAR_KNEE_VELOCITY+LEAD_ELBOW_VELOCITY+REAR_ELBOW_VELOCITY+HIP_ROTATION+TRUNK_ROTATION+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+REAR_SHOULDER_ABD+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION
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/RESULT_METRIC_NAME=LOAD_BAT_ECAP_MAG_VEL+LOAD_BAT_SWEET_SPOT_VEL+LOAD_BAT_ANG_VEL+LOAD_BAT_ECAP_MAG_ACC+LOAD_BAT_SWEET_SPOT_MAG_ACC+LOAD_LEAD_KNEE_FLEXION+LOAD_REAR_KNEE_FLEXION+LOAD_LEAD_ELBOW_FLEXION+LOAD_REAR_ELBOW_FLEXION+LOAD_LEAD_KNEE_VELOCITY+LOAD_REAR_KNEE_VELOCITY+LOAD_LEAD_ELBOW_VELOCITY+LOAD_REAR_ELBOW_VELOCITY+LOAD_HIP_ROTATION+LOAD_TRUNK_ROTATION+LOAD_TRUNK_FLEXION+LOAD_TRUNK_LATERAL_FLEXION+LOAD_REAR_SHOULDER_ABD+LOAD_HIP_VELOCITY+LOAD_TRUNK_VELOCITY+LOAD_LEAD_ARM_ANG_VEL+LOAD_LEAD_HAND_ANG_VEL+LOAD_HEAD_ROTATION+LOAD_HEAD_LATERAL_FLEXION+LOAD_HEAD_FLEXION
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/COMPONENT_SEQUENCE=X, X, ALL, X, X, X, X, X, X, X, X, X, X, X, ALL, ALL, ALL, ALL, X, ALL, ALL, ALL, ALL, ALL, ALL
/EVENT_NAME=LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD, LOAD
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/GENERATE_MEAN_AND_STDDEV=FALSE
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;
Metric_Signal_Value_At_Event
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+MAG_BAT_ANG_VEL+BAT_ECAP_MAG_ACC+BAT_SWEET_SPOT_MAG_ACC+LEAD_KNEE_ANGLES+REAR_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_ELBOW_ANGLES+LEAD_KNEE_VELOCITY+REAR_KNEE_VELOCITY+LEAD_ELBOW_VELOCITY+REAR_ELBOW_VELOCITY+HIP_ROTATION+TRUNK_ROTATION+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+REAR_SHOULDER_ABD+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION
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/RESULT_METRIC_NAME=FOOT_DOWN_BAT_ECAP_MAG_VEL+FOOT_DOWN_BAT_SWEET_SPOT_VEL+FOOT_DOWN_BAT_ANG_VEL+FOOT_DOWN_BAT_ECAP_MAG_ACC+FOOT_DOWN_BAT_SWEET_SPOT_MAG_ACC+FOOT_DOWN_LEAD_KNEE_FLEXION+FOOT_DOWN_REAR_KNEE_FLEXION+FOOT_DOWN_LEAD_ELBOW_FLEXION+FOOT_DOWN_REAR_ELBOW_FLEXION+FOOT_DOWN_LEAD_KNEE_VELOCITY+FOOT_DOWN_REAR_KNEE_VELOCITY+FOOT_DOWN_LEAD_ELBOW_VELOCITY+FOOT_DOWN_REAR_ELBOW_VELOCITY+FOOT_DOWN_HIP_ROTATION+FOOT_DOWN_TRUNK_ROTATION+FOOT_DOWN_TRUNK_FLEXION+FOOT_DOWN_TRUNK_LATERAL_FLEXION+FOOT_DOWN_REAR_SHOULDER_ABD+FOOT_DOWN_HIP_VELOCITY+FOOT_DOWN_TRUNK_VELOCITY+FOOT_DOWN_LEAD_ARM_ANG_VEL+FOOT_DOWN_LEAD_HAND_ANG_VEL+FOOT_DOWN_HEAD_ROTATION+FOOT_DOWN_HEAD_LATERAL_FLEXION+FOOT_DOWN_HEAD_FLEXION
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/COMPONENT_SEQUENCE=X, X, ALL, X, X, X, X, X, X, X, X, X, X, X, ALL, ALL, ALL, ALL, X, ALL, ALL, ALL, ALL, ALL, ALL
/EVENT_NAME=FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN, FOOT_DOWN
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/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+MAG_BAT_ANG_VEL+BAT_ECAP_MAG_ACC+BAT_SWEET_SPOT_MAG_ACC+LEAD_KNEE_ANGLES+REAR_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_ELBOW_ANGLES+LEAD_KNEE_VELOCITY+REAR_KNEE_VELOCITY+LEAD_ELBOW_VELOCITY+REAR_ELBOW_VELOCITY+HIP_ROTATION+TRUNK_ROTATION+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+REAR_SHOULDER_ABD+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION
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/RESULT_METRIC_NAME=FIRST_MOVE_BAT_ECAP_MAG_VEL+FIRST_MOVE_BAT_SWEET_SPOT_VEL+FIRST_MOVE_BAT_ANG_VEL+FIRST_MOVE_BAT_ECAP_MAG_ACC+FIRST_MOVE_BAT_SWEET_SPOT_MAG_ACC+FIRST_MOVE_LEAD_KNEE_FLEXION+FIRST_MOVE_REAR_KNEE_FLEXION+FIRST_MOVE_LEAD_ELBOW_FLEXION+FIRST_MOVE_REAR_ELBOW_FLEXION+FIRST_MOVE_LEAD_KNEE_VELOCITY+FIRST_MOVE_REAR_KNEE_VELOCITY+FIRST_MOVE_LEAD_ELBOW_VELOCITY+FIRST_MOVE_REAR_ELBOW_VELOCITY+FIRST_MOVE_HIP_ROTATION+FIRST_MOVE_TRUNK_ROTATION+FIRST_MOVE_TRUNK_FLEXION+FIRST_MOVE_TRUNK_LATERAL_FLEXION+FIRST_MOVE_REAR_SHOULDER_ABD+FIRST_MOVE_HIP_VELOCITY+FIRST_MOVE_TRUNK_VELOCITY+FIRST_MOVE_LEAD_ARM_ANG_VEL+FIRST_MOVE_LEAD_HAND_ANG_VEL+FIRST_MOVE_HEAD_ROTATION+FIRST_MOVE_HEAD_LATERAL_FLEXION+FIRST_MOVE_HEAD_FLEXION
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/COMPONENT_SEQUENCE=X, X, ALL, X, X, X, X, X, X, X, X, X, X, X, ALL, ALL, ALL, ALL, X, ALL, ALL, ALL, ALL, ALL, ALL
/EVENT_NAME=FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE, FIRST_MOVE
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/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+MAG_BAT_ANG_VEL+BAT_ECAP_MAG_ACC+BAT_SWEET_SPOT_MAG_ACC+LEAD_KNEE_ANGLES+REAR_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_ELBOW_ANGLES+LEAD_KNEE_VELOCITY+REAR_KNEE_VELOCITY+LEAD_ELBOW_VELOCITY+REAR_ELBOW_VELOCITY+HIP_ROTATION+TRUNK_ROTATION+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+REAR_SHOULDER_ABD+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION
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/RESULT_METRIC_NAME=IMPACT_BAT_ECAP_MAG_VEL+IMPACT_BAT_SWEET_SPOT_VEL+IMPACT_BAT_ANG_VEL+IMPACT_BAT_ECAP_MAG_ACC+IMPACT_BAT_SWEET_SPOT_MAG_ACC+IMPACT_LEAD_KNEE_FLEXION+IMPACT_REAR_KNEE_FLEXION+IMPACT_LEAD_ELBOW_FLEXION+IMPACT_REAR_ELBOW_FLEXION+IMPACT_LEAD_KNEE_VELOCITY+IMPACT_REAR_KNEE_VELOCITY+IMPACT_LEAD_ELBOW_VELOCITY+IMPACT_REAR_ELBOW_VELOCITY+IMPACT_HIP_ROTATION+IMPACT_TRUNK_ROTATION+IMPACT_TRUNK_FLEXION+IMPACT_TRUNK_LATERAL_FLEXION+IMPACT_REAR_SHOULDER_ABD+IMPACT_HIP_VELOCITY+IMPACT_TRUNK_VELOCITY+IMPACT_LEAD_ARM_ANG_VEL+IMPACT_LEAD_HAND_ANG_VEL+IMPACT_HEAD_ROTATION+IMPACT_HEAD_LATERAL_FLEXION+IMPACT_HEAD_FLEXION
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/COMPONENT_SEQUENCE=X, X, ALL, X, X, X, X, X, X, X, X, X, X, X, ALL, ALL, ALL, ALL, X, ALL, ALL, ALL, ALL, ALL, ALL
/EVENT_NAME=IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT, IMPACT
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/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+MAG_BAT_ANG_VEL+BAT_ECAP_MAG_ACC+BAT_SWEET_SPOT_MAG_ACC+LEAD_KNEE_ANGLES+REAR_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_ELBOW_ANGLES+LEAD_KNEE_VELOCITY+REAR_KNEE_VELOCITY+LEAD_ELBOW_VELOCITY+REAR_ELBOW_VELOCITY+HIP_ROTATION+TRUNK_ROTATION+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+REAR_SHOULDER_ABD+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION
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/RESULT_METRIC_NAME=FOLLOW_THROUGH_BAT_ECAP_MAG_VEL+FOLLOW_THROUGH_BAT_SWEET_SPOT_VEL+FOLLOW_THROUGH_BAT_ANG_VEL+FOLLOW_THROUGH_BAT_ECAP_MAG_ACC+FOLLOW_THROUGH_BAT_SWEET_SPOT_MAG_ACC+FOLLOW_THROUGH_LEAD_KNEE_FLEXION+FOLLOW_THROUGH_REAR_KNEE_FLEXION+FOLLOW_THROUGH_LEAD_ELBOW_FLEXION+FOLLOW_THROUGH_REAR_ELBOW_FLEXION+FOLLOW_THROUGH_LEAD_KNEE_VELOCITY+FOLLOW_THROUGH_REAR_KNEE_VELOCITY+FOLLOW_THROUGH_LEAD_ELBOW_VELOCITY+FOLLOW_THROUGH_REAR_ELBOW_VELOCITY+FOLLOW_THROUGH_HIP_ROTATION+FOLLOW_THROUGH_TRUNK_ROTATION+FOLLOW_THROUGH_TRUNK_FLEXION+FOLLOW_THROUGH_TRUNK_LATERAL_FLEXION+FOLLOW_THROUGH_REAR_SHOULDER_ABD+FOLLOW_THROUGH_HIP_VELOCITY+FOLLOW_THROUGH_TRUNK_VELOCITY+FOLLOW_THROUGH_LEAD_ARM_ANG_VEL+FOLLOW_THROUGH_LEAD_HAND_ANG_VEL+FOLLOW_THROUGH_HEAD_ROTATION+FOLLOW_THROUGH_HEAD_LATERAL_FLEXION+FOLLOW_THROUGH_HEAD_FLEXION
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/COMPONENT_SEQUENCE=X, X, ALL, X, X, X, X, X, X, X, X, X, X, X, ALL, ALL, ALL, ALL, X, ALL, ALL, ALL, ALL, ALL, ALL
/EVENT_NAME=FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH, FOLLOW_THROUGH
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/GENERATE_MEAN_AND_STDDEV=FALSE
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;

Metric_Signal_Value_At_Event
/SIGNAL_TYPES=DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED
/SIGNAL_FOLDER=PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED
/SIGNAL_NAMES=BAT_ECAP_MAG_VEL+BAT_SWEET_SPOT_MAG_VEL+MAG_BAT_ANG_VEL+BAT_ECAP_MAG_ACC+BAT_SWEET_SPOT_MAG_ACC+LEAD_KNEE_ANGLES+REAR_KNEE_ANGLES+LEAD_ELBOW_ANGLES+REAR_ELBOW_ANGLES+LEAD_KNEE_VELOCITY+REAR_KNEE_VELOCITY+LEAD_ELBOW_VELOCITY+REAR_ELBOW_VELOCITY+HIP_ROTATION+TRUNK_ROTATION+TRUNK_FLEXION+TRUNK_LATERAL_FLEXION+REAR_SHOULDER_ABD+HIP_ROTATION_VELOCITY+TRUNK_ROTATION_VELOCITY+LEAD_ARM_MAG_ANG_VEL+LEAD_HAND_MAG_ANG_VEL+HEAD_ROTATION+HEAD_LATERAL_FLEXION+HEAD_FLEXION
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/RESULT_METRIC_NAME=FOOT_UP_BAT_ECAP_MAG_VEL+FOOT_UP_BAT_SWEET_SPOT_VEL+FOOT_UP_BAT_ANG_VEL+FOOT_UP_BAT_ECAP_MAG_ACC+FOOT_UP_BAT_SWEET_SPOT_MAG_ACC+FOOT_UP_LEAD_KNEE_FLEXION+FOOT_UP_REAR_KNEE_FLEXION+FOOT_UP_LEAD_ELBOW_FLEXION+FOOT_UP_REAR_ELBOW_FLEXION+FOOT_UP_LEAD_KNEE_VELOCITY+FOOT_UP_REAR_KNEE_VELOCITY+FOOT_UP_LEAD_ELBOW_VELOCITY+FOOT_UP_REAR_ELBOW_VELOCITY+FOOT_UP_HIP_ROTATION+FOOT_UP_TRUNK_ROTATION+FOOT_UP_TRUNK_FLEXION+FOOT_UP_TRUNK_LATERAL_FLEXION+FOOT_UP_REAR_SHOULDER_ABD+FOOT_UP_HIP_VELOCITY+FOOT_UP_TRUNK_VELOCITY+FOOT_UP_LEAD_ARM_ANG_VEL+FOOT_UP_LEAD_HAND_ANG_VEL+FOOT_UP_HEAD_ROTATION+FOOT_UP_HEAD_LATERAL_FLEXION+FOOT_UP_HEAD_FLEXION
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/COMPONENT_SEQUENCE=X, X, ALL, X, X, X, X, X, X, X, X, X, X, X, ALL, ALL, ALL, ALL, X, ALL, ALL, ALL, ALL, ALL, ALL
/EVENT_NAME=FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP, FOOT_UP
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/GENERATE_MEAN_AND_STDDEV=FALSE
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;

